CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:.*_(?P<strain>.*)_(?P<frame>.*)_.*.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (file does contain "BF")
    Name to assign these images:bf
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:gfp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DsR")
    Name to assign these images:red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:bf
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:FilteredImage
    Name the primary objects to be identified:edge_cells
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:PrimaryOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:5
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:red
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,70
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Image size
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:PrimaryOutlines
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    Regularization factor:0.05
    Name the outline image:SecondaryOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:No
    Threshold setting version:2
    Threshold strategy:Automatic
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:edge_cells
    Select the smaller identified objects:ShrunkenNuclei
    Name the tertiary objects to be identified:cytoplasm
    Name the outline image:cytoplasm_Outlines
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:Yes

RelateObjects:[module_num:11|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
    Select the input child objects:Nuclei
    Select the input parent objects:cytoplasm
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
FilterObjects:[module_num:12|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
    Name the output objects:unique_cyto
    Select the object to filter:cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:Children_Nuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select additional object to relabel:cytoplasm
    Name the relabeled objects:FilteredGreen
    Retain outlines of relabeled objects?:No
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
RelateObjects:[module_num:13|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
    Select the input child objects:Nuclei
    Select the input parent objects:unique_cyto
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
MaskImage:[module_num:14|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
    Select the input image:gfp
    Name the output image:gfp_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:unique_cyto
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    Invert the mask?:No

ApplyThreshold:[module_num:15|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
    Select the input image:gfp_masked
    Name the output image:gfp_masked_thresh
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:Yes
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:2
    Threshold strategy:Automatic
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:gfp_masked_thresh
    Name the primary objects to be identified:blobs
    Typical diameter of objects, in pixel units (Min,Max):5,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.03,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MeasureObjectIntensity:[module_num:17|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
    Hidden:1
    Select an image to measure:gfp
    Select objects to measure:blobs

RelateObjects:[module_num:18|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
    Select the input child objects:blobs
    Select the input parent objects:unique_cyto
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ExportToSpreadsheet:[module_num:19|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/filtering multi nucl adj exp 2 pixels
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :unique_cyto|Parent_cytoplasm,unique_cyto|Number_Object_Number,unique_cyto|Location_Center_Y,unique_cyto|Location_Center_X,unique_cyto|Children_Nuclei_Count,unique_cyto|Children_blobs_Count,unique_cyto|Mean_Nuclei_Location_Center_Y,unique_cyto|Mean_Nuclei_Location_Center_X,unique_cyto|Mean_Nuclei_Number_Object_Number,unique_cyto|Mean_Nuclei_Children_Cells_Count,unique_cyto|Mean_blobs_Location_Center_Y,unique_cyto|Mean_blobs_Location_Center_X,unique_cyto|Mean_blobs_Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:xx_
    Overwrite existing files without warning?:Yes
    Data to export:unique_cyto
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:20|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:benni_test_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:benni_test.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:cells
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
    Select the classification type:Image
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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